PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'id': '', 'gender (M/F/N)': '', 'age': '', 'hand(R/L)': '', 'session': '001', 'group': '01'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [900, 900]
  expName = experiment_eo_ec
  logging level = data
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Routines
  Routine trial
    ImageComponent valence_arousal_space
      image = res\img\valence_arousal_space_basic.png
      opacity = 0.5
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    ImageComponent reticle
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    SoundComponent song_one
      sound = res\playlist\song_1.ogg
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    JoystickComponent joystick
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      timeRelativeTo = routine
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    SoundComponent open_eyes
      sound = A
      startVal [time (s)] = 59
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_one_rating
      Data Format = rows
      Item Padding = 0.1
      Items = res\forms\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 60
      stopVal [duration (s)] = 20
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    SoundComponent white_noise_rating
      sound = res\1 min wn.wav
      startVal [time (s)] = 80
      stopVal [duration (s)] = 15
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    TextComponent instruction_ec
      letterHeight = 0.1
      startVal [time (s)] = 80
      stopVal [duration (s)] = 10
      text = Now CLOSE your eyes and get ready for the next song.
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    ImageComponent eyes_closed
      image = res\img\eye_closed.png
      size = (1, 1)
      startVal [time (s)] = 90
      stopVal [duration (s)] = 5
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    ImageComponent valence_arousal_space_2
      image = res\img\valence_arousal_space_basic.png
      size = (0.5, 0.5)
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    SoundComponent song_two
      sound = res\playlist\song_2.ogg
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    ImageComponent reticle_2
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    JoystickComponent joystick_2
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = every frame
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
      timeRelativeTo = joystick onset
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    SoundComponent eyes_open
      sound = A
      startVal [time (s)] = 154
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_two_rating
      Data Format = rows
      Item Padding = 0.05
      Items = res\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 155
      stopVal [duration (s)] = 20
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    SoundComponent white_noise_rating_two
      sound = res\1 min wn.wav
      startVal [time (s)] = 175
      stopVal [duration (s)] = 15
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    TextComponent instruction_eo
      letterHeight = 0.1
      startVal [time (s)] = 175
      stopVal [duration (s)] = 10
      text = Now OPEN your eyes and get ready for the next song.
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    ImageComponent eyes_open_2
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 185
      stopVal [duration (s)] = 5
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  Routine enter_rest_state
    TextComponent resting_state_instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Before the trial, we need to record your "resting" state with both eyes OPEN and eyes CLOSED for 2 minutes each.

        Think of it as short meditation session, relax your brain and focus on your breathing.
    TextComponent rest_state_eyes_open
      letterHeight = 0.1
      startVal [time (s)] = 20
      stopVal [duration (s)] = 5
      text = We start we eyes OPEN, get ready!
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    ImageComponent rest_state_eyes_open_icon
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 120
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  Routine exit_rest_state
  Routine intro
    TextComponent welcome_instruction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Welcome to the Emotion Music experiment.

        This is the real experimental session
    TextComponent welcome_instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 15
      stopVal [duration (s)] = 40
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      text:
        The experiment is based on timed routines, it is important that you follow the instructions and answer the ratings in the given time (15 seconds).

        Your main task is to listen to the proposed music playlist and annotate your emotions continuously by moving the reticle on the Valence-Arousal space.

        The total length of the experiment is about 20 minutes.
    ButtonComponent start_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 55
      text = Start Experiment
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  Routine white_noise
    SoundComponent intro_white_noise
      sound = res\1 min wn.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent first_instruction
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 15
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      text:
        The experiment is about to begin.

        The first trial will begin with your eyes OPEN.

        Please be careful to the instructions and make sure your eyes stay OPEN or CLOSED accordingly until the end of the song.
    ImageComponent first_eyes_instruction
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 5
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  Routine trial_continue
    ImageComponent valence_arousal_space_3
      image = res\img\valence_arousal_space_basic.png
      opacity = 0.5
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    ImageComponent reticle_3
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    SoundComponent song_one_2
      sound = res\playlist\song_1.ogg
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    JoystickComponent joystick_3
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      timeRelativeTo = routine
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    SoundComponent open_eyes_2
      sound = A
      startVal [time (s)] = 59
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_one_rating_2
      Data Format = rows
      Item Padding = 0.1
      Items = res\forms\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 60
      stopVal [duration (s)] = 20
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    SoundComponent white_noise_rating_2
      sound = res\1 min wn.wav
      startVal [time (s)] = 80
      stopVal [duration (s)] = 15
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    TextComponent instruction_ec_2
      letterHeight = 0.1
      startVal [time (s)] = 80
      stopVal [duration (s)] = 10
      text = Now CLOSE your eyes and get ready for the next song.
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    ImageComponent eyes_closed_2
      image = res\img\eye_closed.png
      size = (1, 1)
      startVal [time (s)] = 90
      stopVal [duration (s)] = 5
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    ImageComponent valence_arousal_space_4
      image = res\img\valence_arousal_space_basic.png
      size = (0.5, 0.5)
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    SoundComponent song_two_2
      sound = res\playlist\song_2.ogg
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    ImageComponent reticle_4
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    JoystickComponent joystick_4
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = every frame
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
      timeRelativeTo = joystick onset
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    SoundComponent eyes_open_3
      sound = A
      startVal [time (s)] = 154
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_two_rating_2
      Data Format = rows
      Item Padding = 0.05
      Items = res\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 155
      stopVal [duration (s)] = 20
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    SoundComponent white_noise_rating_two_2
      sound = res\1 min wn.wav
      startVal [time (s)] = 175
      stopVal [duration (s)] = 15
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    TextComponent instruction_eo_2
      letterHeight = 0.1
      startVal [time (s)] = 175
      stopVal [duration (s)] = 10
      text = Now OPEN your eyes and get ready for the next song.
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    ImageComponent eyes_open_4
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 185
      stopVal [duration (s)] = 5
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  Routine break_2
  Routine white_noise_2
    SoundComponent intro_white_noise_2
      sound = res\1 min wn.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent first_instruction_2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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      text:
        The experiment is about to continue.

        The next trial will begin with your eyes OPEN.
    ImageComponent first_eyes_instruction_2
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 5
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Flow
  Routine intro
  Routine enter_rest_state
  Routine white_noise
  LoopInitiator phase_1 loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine trial
  LoopTerminator phase_1
  Routine break_2
  Routine white_noise_2
  LoopInitiator phase_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial_continue
  LoopTerminator phase_2
